CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['*****************************************************************************', 'GOAL: Extract intensity and morphometric features from 2D gastruloids.', '*****************************************************************************', '', 'Drag and drop images to the box below.', 'Images have 2 channels:', '- Brightfield, whole gastruloid', '- GFP, labeling a reporter gene']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'We will extract metadata from 2 sources:', '- File names', '- CSV file', '', 'The CSV file contains information about experimental treatments']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<colrow>.*)\.tif
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Default Input Folder|
    Match file and image metadata:[{'CSV Metadata': 'colrow', 'Image Metadata': 'colrow'}]
    Use case insensitive matching?:No
    Metadata file name:metadata.csv
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'Selecting "color image" so that CellProfiler can appropriately handle the 2 channels.']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'This dataset has no groups.']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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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notes:['Split channels']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
    Select the input image:raw
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:bf
    Convert green to gray?:Yes
    Name the output image:gfp
    Convert blue to gray?:No
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
MeasureImageIntensity:[module_num:6|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notes:['Let us enhance the brightfield image in preparation for organoid segmentation.', 'Let us measure pixel intensities in order to estimate the "background" intensity']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
    Select images to measure:bf
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ImageMath:[module_num:7|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notes:['Transform the brightfield into a flourescence-like image (dark background, bright objects)', 'Compute the pixel-by-pixel absolute difference to the median image intensity.']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
    Operation:Absolute Difference
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:No
    Set values greater than 1 equal to 1?:No
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:bf_darkbg
    Image or measurement?:Image
    Select the first image:bf
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_bf

Closing:[module_num:8|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notes:['The morphological closing will improve the segmentation of darker regions.']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
    Select the input image:bf_darkbg
    Name the output image:bf_enhanced
    Structuring element:disk,1

IdentifyPrimaryObjects:[module_num:9|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notes:['This module thresholds the image and performs the connected component analysis.']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
    Select the input image:bf_enhanced
    Name the primary objects to be identified:gastruloid0
    Typical diameter of objects, in pixel units (Min,Max):70,400
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:3
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
MeasureObjectIntensity:[module_num:10|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notes:['The auto-thresholding method in the IdentifyPrimaryObjects module may segment objects even if there is no gastruloid in the image at all.', '', 'If an object is indeed a gastruloid it should have a high intensity in the "bf_darkbg" image.', 'Let us measure pixel intensities in this image.']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
    Select images to measure:bf_darkbg
    Select objects to measure:gastruloid0

DisplayDataOnImage:[module_num:11|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notes:['This module overlays the mean pixel intensity at the "gastruloid0" objects to help determining if a givel intensity value is characteristic of a gastruloid or not.']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
    Display object or image measurements?:Object
    Select the input objects:gastruloid0
    Measurement to display:Intensity_MeanIntensity_bf_darkbg
    Select the image on which to display the measurements:bf_darkbg
    Text color:red
    Name the output image that has the measurements displayed:display_intensity
    Font size (points):20
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
FilterObjects:[module_num:12|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notes:['Filter objects which are not gastruloids (low intensity in the "bf_darkbg" image.', 'The value can be selected by visual inspection of the previous module.']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
    Select the objects to filter:gastruloid0
    Name the output objects:gastruloid
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_bf_darkbg
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
CorrectIlluminationCalculate:[module_num:13|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notes:['Shading correction in the GFP channel (1st step). This is required for intensity measurements.', 'Compute a illumination function.']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
    Select the input image:gfp
    Name the output image:gfp_illumination
    Select how the illumination function is calculated:Background
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    Block size:20
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Convex Hull
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:14|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notes:['Shading correction in the GFP channel (2nd step).', 'Apply illumination function.']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
    Select the input image:gfp
    Name the output image:gfp_bgCorr
    Select the illumination function:gfp_illumination
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:No
    Set output image values greater than 1 equal to 1?:No

MeasureObjectIntensity:[module_num:15|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notes:['Measure GFP fluorescence at each object.']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
    Select images to measure:gfp_bgCorr
    Select objects to measure:gastruloid

MeasureObjectIntensityDistribution:[module_num:16|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notes:['Measure radial fluorescence distribution in each object.', 'Here 4 concentric bins are defined.']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
    Select images to measure:gfp_bgCorr
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:gastruloid
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:17|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notes:['Morphometry']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
    Select object sets to measure:gastruloid
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:18|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notes:['Generate an image with segmentation labels.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:bf
    Name the output image:overlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:green
    Select objects to display:gastruloid

SaveImages:[module_num:19|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notes:['Save segmentation labels for quality control.']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
    Select the type of image to save:Image
    Select the image to save:overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:--outline
    Saved file format:png
    Output file location:Default Output Folder|cp_analysis
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:20|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notes:['Save numerical features as CSV.', '', 'Two files will be saved:', '[objects.csv] - Contains features for every object in the dataset', '[image.csv]  - Summary statistics: mean and standard deviation of each numerical feature, image by image.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|cp_analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|FileName_raw,Image|Metadata_treatment,Image|Metadata_FileLocation,Image|Metadata_colrow,Image|Count_gastruloid,Image|PathName_raw,gastruloid|AreaShape_MeanRadius,gastruloid|AreaShape_FormFactor,gastruloid|AreaShape_Area,gastruloid|AreaShape_Center_Y,gastruloid|AreaShape_Center_X,gastruloid|AreaShape_MajorAxisLength,gastruloid|AreaShape_MinFeretDiameter,gastruloid|AreaShape_MaxFeretDiameter,gastruloid|AreaShape_Solidity,gastruloid|AreaShape_MinorAxisLength,gastruloid|AreaShape_Orientation,gastruloid|AreaShape_EquivalentDiameter,gastruloid|AreaShape_Compactness,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:gastruloid
    Combine these object measurements with those of the previous object?:No
    File name:objects.csv
    Use the object name for the file name?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:image.csv
    Use the object name for the file name?:No
